PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'computer_number': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1680, 1050]
  color = 0.6549, 0.6549, 0.6549
  expName = turtles_categorization
  frameRateMsg = STARTING EXPERIMENT
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine turtle_param_functions
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    CodeComponent turtle_functions
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        def get_turtle_halfcircle_vertices(radius):
            n_points = 300
            angles = np.linspace(0, np.pi, n_points)
            arc_x = radius*np.cos(angles)
            arc_y = radius*np.sin(angles)
            verts=np.column_stack([arc_x,arc_y])
            verts=np.vstack(([-radius,0],
                             verts,
                             [radius,0]))
            return verts

        def get_turtle_wedge_vertices(angle):
            radius=150 # DO NOT CHANGE
            n_points = 300
            angle_rad = np.deg2rad(angle)
            angles = np.linspace(0, angle_rad, n_points)
            arc_x=radius*np.cos(angles)
            arc_y=radius*np.sin(angles)
            verts=np.column_stack([arc_x,arc_y])
            verts=np.vstack(([0,0],
                            verts,
                            [0,0]))
            return verts
  Routine training_response
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    KeyboardComponent key_resp_training
      allowedKeys = 'f','j'
      correctAns = $corr_resp_tmp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent turtle_halfcircle
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -1)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-1)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent training_prompt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Is this turtle in Species F or Species J?

        F - Species F, J - Species J
  Routine exp_setup
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    CodeComponent setup
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        participant_number=int(expInfo['participant'])
        num_transfer_blocks=3
        num_train_blocks=5
        num_size_blocks=2

        if participant_number % 2 == 0:
            condition="switch/standard"
        elif participant_number % 2 !=0:
            condition="standard/switch"

        category_labels=np.array(['f','j'])
        np.random.shuffle(category_labels)
        category_A_label=category_labels[0]
        category_B_label=category_labels[1]

        # add data
        expInfo['condition']=condition
        expInfo['category_A_label']=category_A_label
        expInfo['category_B_label']=category_B_label
        #thisExp.addData('condition',condition)
        #thisExp.addData('category_A_label',category_A_label)
        #thisExp.addData('category_B_label',category_B_label)
  Routine training_feedback
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    TextComponent train_feedback_text_display
      color [set every repeat] = $train_feedback_col
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $train_feedback_dur
      text [set every repeat] = $train_feedback_text
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    PolygonComponent turtle_halfcircle_for_feedback
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = train_feedback_dur
      vertices [set every repeat] = turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_feedback
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -1)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = train_feedback_dur
      vertices [set every repeat] = turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_feedback
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-1)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = train_feedback_dur
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  Routine blank
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine train_feedback_code_checks
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    CodeComponent train_feedback_text_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_training.corr==1:
            train_feedback_dur=1;
            train_feedback_col="#008000"
            if category=="A":
                train_feedback_text="You were correct! This turtle belongs to species " + category_A_label.upper() + "."
            elif category=="B":
                train_feedback_text="You were correct! This turtle belongs to species " + category_B_label.upper() + "."
        elif key_resp_training.corr==0:
            train_feedback_dur=2;
            train_feedback_col="#FF0000"
            if category=="A":
                train_feedback_text="You were incorrect. This turtle belongs to species " + category_A_label.upper() + "."
            elif category=="B":
                train_feedback_text="You were incorrect. This turtle belongs to species " + category_B_label.upper() + "."
  Routine fixation_cross
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    PolygonComponent fixation_cross_1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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  Routine transfer_response_switch
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    CodeComponent get_turtle_params_transfer
      Code Type = Auto->JS
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      Begin Routine:
        turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(radius)
        turtle_wedge_vertices = get_turtle_wedge_vertices(angle)

        if trial_type=="standard":
            transfer_prompt_col="#000000"
            transfer_prompt="Is this turtle in Species F or Species J?\n\n F-Species F, J-Species J"
        elif trial_type=="switch":
            transfer_prompt_col="#FF0000"
            transfer_prompt="Is this turtle smaller or larger than the average turtle?\n\n F-smaller, J-larger"
    PolygonComponent turtle_halfcircle_switch
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_switch
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -1)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_switch
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-1)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent transfer_prompt_switch_trials
      color [set every repeat] = $transfer_prompt_col
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
      text [set every repeat] = $transfer_prompt
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    KeyboardComponent key_resp_transfer_switch
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine transfer_response_standard
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    CodeComponent get_turtle_params_transfer_standard
      Code Type = Auto->JS
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      Begin Routine:
        turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(radius)
        turtle_wedge_vertices = get_turtle_wedge_vertices(angle)
    TextComponent transfer_prompt_standard_trials
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Is this turtle in Species F or Species J?

        F - Species F, J - Species J
    KeyboardComponent key_resp_transfer_standard
      allowedKeys [set every repeat] = ['f','j']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent turtle_halfcircle_standard
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_standard
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -1)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_standard
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-1)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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  Routine indx
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  Routine index
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    CodeComponent index_setup
      Code Type = Auto->JS
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      Begin Routine:
        i=0
  Routine transfer_loop_setup
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    CodeComponent index_update
      Code Type = Auto->JS
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      Begin Routine:
        if i==0:
            if condition=="switch/standard":
                num_repeats_1=0
                num_repeats_2=num_transfer_blocks
                do_standard_instructions=0
                do_switch_instructions=1
            elif condition=="standard/switch":
                num_repeats_1=num_transfer_blocks
                num_repeats_2=0
                do_standard_instructions=1
                do_switch_instructions=0
        elif i==1:
            if condition=="switch/standard":
                num_repeats_1=num_transfer_blocks
                num_repeats_2=0
                do_standard_instructions=1
                do_switch_instructions=0
            elif condition=="standard/switch":
                num_repeats_1=0
                num_repeats_2=num_transfer_blocks
                do_standard_instructions=0
                do_switch_instructions=1
        i=i+1
  Routine size_judgment_instructions_p1
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    TextComponent avg_turtle_instr_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        You have completed the first phase of the experiment.

        Press space to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine avg_turtle_setup
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    CodeComponent get_avg_turtle
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        avg_turtle=pd.read_csv('stim/stim_avg_turtle.csv')
        avg_turtle_radius=avg_turtle['radius'][0]
        avg_turtle_angle=avg_turtle['angle'][0]
        avg_turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(avg_turtle_radius)
        avg_turtle_wedge_vertices = get_turtle_wedge_vertices(avg_turtle_angle)
        avg_turtle_area = avg_turtle['area'][0]
  Routine size_judgment_instructions_p2
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    TextComponent avg_turtle_instr_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        In the next phase, we are going to ask you to learn something else about the turtles.

        However, make sure not to forget the turtle species names you just learned.

        Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine size_judgment_instructions_p3
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    PolygonComponent turtle_halfcircle_for_size_instructions
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_size_instructions
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_instructions
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent avg_turtle_instr_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Here is an average turtle. This turtle’s size - the total area taken up by its shell and head - is very average compared to the other turtles you have seen so far.

        Press space to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine size_judgment_instructions_p4
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    PolygonComponent turtle_halfcircle_for_size_instructions_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_size_instructions_2
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_instructions_2
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent avg_turtle_instr
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Your task, in the next part of the experiment, is to determine whether each turtle you see is smaller or larger than this average turtle.

        You will still use the f and j keys - f for smaller, j for larger.

        Press space to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine size_jugment_instructions_p5
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    PolygonComponent turtle_halfcircle_for_size_instructions_3
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_size_instructions_3
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_instructions_3
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent avg_turtle_instr_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        We will still give you feedback on your answer.

        Some trials will be harder than others; we simply ask you to please try your best.

        Press space to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine size_judgment_instructions_p6
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    PolygonComponent turtle_halfcircle_for_size_instructions_4
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_size_instructions_4
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = avg_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_instructions_4
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent avg_turtle_instr_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        The next part of the experiment will now begin.

        Press space to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .5
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  Routine size_judgment_response
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    PolygonComponent turtle_half_circle_for_size_judgment
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_size_judgment
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -1)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_wedge_vertices
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    PolygonComponent turtle_boundary_for_size_judgment
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-1)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent size_judgment_prompt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
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      text:
        Is this turtle smaller or larger than the average turtle?

        F - smaller, J - larger
    KeyboardComponent key_resp_size_judgment
      allowedKeys = 'f','j'
      correctAns = $corr_resp_size_tmp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine size_judgment_feedback
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    PolygonComponent turtle_half_circle_for_size_judgment_feedback
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = size_feedback_dur
      vertices [set every repeat] = turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_size_judgment_feedback
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -1)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = size_feedback_dur
      vertices [set every repeat] = turtle_wedge_vertices
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    PolygonComponent turtle_boundary_for_size_judgment_feedback
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-1)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = size_feedback_dur
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    TextComponent size_feedback_text_display
      color [set every repeat] = $size_feedback_col
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $size_feedback_dur
      text [set every repeat] = $size_feedback_text
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  Routine size_jugment_code_check
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    CodeComponent size_judgment_code_check
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_size_judgment.corr==1:
            size_feedback_dur=1;
            size_feedback_col="#008000"
            if corr_resp_size_tmp=='f':
                size_feedback_text="You were correct! This turtle is smaller than the average turtle."
            elif corr_resp_size_tmp=="j":
                size_feedback_text="You were correct! This turtle is larger than the average turtle."
        elif key_resp_size_judgment.corr==0:
            size_feedback_dur=2;
            size_feedback_col="#FF0000"
            if corr_resp_size_tmp=='f':
                size_feedback_text="You were incorrect. This turtle is smaller than the average turtle."
            elif corr_resp_size_tmp=="j":
                size_feedback_text="You were incorrect. This turtle is larger than the average turtle."
  Routine categorization_instructions_p1
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    TextComponent categorization_instructions_text_1
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Press space to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
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  Routine categorization_instructions_p2
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    CodeComponent turtle_setup_for_categorization_instructions
      Code Type = Auto->JS
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      Begin Routine:
        example_turtle_radius=113
        example_turtle_angle=25
        example_turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(example_turtle_radius)
        example_turtle_wedge_vertices = get_turtle_wedge_vertices(example_turtle_angle)
    TextComponent categorization_instructions_text_2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this experiment you will be making judgments about turtles!

        Here is an example:
    PolygonComponent turtle_halfcircle_for_categorization_instructions
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_categorization_instructions
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_categorization_instructions
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent space
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine categorization_instructions_p3
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    CodeComponent turtle_setup_for_categorization_instructions_2
      Code Type = Auto->JS
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      Begin Routine:
        example_turtle_radius=40
        example_turtle_angle=30
        example_turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(example_turtle_radius)
        example_turtle_wedge_vertices = get_turtle_wedge_vertices(example_turtle_angle)
    TextComponent categorization_instructions_text_3
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Here is another example:
    PolygonComponent turtle_halfcircle_for_categorization_instructions_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_halfcircle_vertices
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    TextComponent space_2
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    PolygonComponent turtle_wedge_for_categorization_instructions_2
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_categorization_instructions_2
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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  Routine categorization_instructions_p4
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    TextComponent categorization_instructions_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        First, you are tasked with determining which turtle belongs to Species F or Species J.

        There are TWO components related to the turtles’ species classification. You should consider both
        -   the height of the green shell AND

        -   the angle of the yellow head
    PolygonComponent turtle_halfcircle_for_categorization_instructions_3
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_categorization_instructions_3
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_wedge_vertices
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    TextComponent space_3
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    PolygonComponent turtle_wedge_boundary_for_categorization_instructions_3
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine categorization_instructions_p5
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    TextComponent categorization_instructions_text_4
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        For now, you will learn to classify a single turtle on each trial.


        Before each trial, you will see a plus sign. This will let you know that you are about to see a new turtle.


        When the trial begins, you will be shown a turtle.
    PolygonComponent turtle_halfcircle_for_categorization_instructions_4
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_categorization_instructions_4
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_wedge_vertices
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    TextComponent space_4
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    PolygonComponent turtle_wedge_boundary_for_categorization_instructions_4
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine categorization_instructions_p6
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    TextComponent categorization_instructions_text_5
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Press “f” on the keyboard if the turtle belongs to Species F, and “j” if it belongs to Species J.


        After each response you will be told whether or not your answer was correct.


        At first you will be guessing, however, the feedback will help you get better at classifying these turtles.
    PolygonComponent turtle_halfcircle_for_categorization_instructions_5
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_categorization_instructions_5
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_categorization_instructions_5
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent space_5
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine categorization_instructions_p8
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    TextComponent space_to_begin_exp
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = Press space to begin classifying turtles.
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
    RoutineSettingsComponent consent
      color = 1.0000, 1.0000, 1.0000
      useWindowParams = True
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    ButtonComponent agree_button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 15
      pos = (400, -200)
      size = 200,200
      startVal [time (s)] = 0
      text = By clicking this box, I agee to take part in this survey and understand the information above about my participation.
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    ButtonComponent decline_button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 15
      pos = 400,-400
      size = 150,150
      startVal [time (s)] = 0
      text = I do not agree to participate.
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    ImageComponent consent1_img
      anchor = bottom-center
      image = consent_p1.png
      pos = (-350, -475)
      size = 825,1000
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = agree_button, decline_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent consent2_img
      anchor = bottom-center
      image = consent_p2.png
      pos = (400, -100)
      size = 700,600
      startVal [time (s)] = 0.0
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    CodeComponent check_consent
      Code Type = Auto->JS
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      End Routine:
        if decline_button.numClicks==1:
            core.quit()
  Routine age_check
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    ButtonComponent age_yes
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 15
      pos = 0,0
      size = 200,200
      startVal [time (s)] = 0
      text = By clicking this box, I state that I am 18 years of age or older.
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    ButtonComponent age_no
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 15
      pos = 0,-300
      size = 200,200
      startVal [time (s)] = 0
      text = I am NOT 18 years of age or older.
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    CodeComponent age_check_code
      Code Type = Auto->JS
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      End Routine:
        if age_no.numClicks==1:
            delete_data=True
        else:
            delete_data=False
  Routine categorization_instructions_p7
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    TextComponent categorization_instructions_text_6
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = There will be other parts to this experiment, but instructions for those will come later.
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    PolygonComponent turtle_halfcircle_for_categorization_instructions_6
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      pos = (0, -200)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge_for_categorization_instructions_6
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      lineWidth = 0
      pos = (0, -201)
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = example_turtle_wedge_vertices
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    PolygonComponent turtle_wedge_boundary_for_categorization_instructions_6
      anchor = bottom-left
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      pos = (0,-200)
      shape = line
      size = (150, 1)
      startVal [time (s)] = 0.0
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    TextComponent space_6
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine transfer_trial_standard_single_code_check
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    CodeComponent transfer_trial_single_resp_check
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_transfer_standard.rt<=max_transfer_rt:
            transfer_message_dur=0.001;
            transfer_text=""
            num_repeats=0
        elif key_resp_transfer_standard.rt>max_transfer_rt:
            transfer_message_dur=2;
            transfer_text="You responded too slowly - make sure to respond within 5 seconds."
  Routine transfer_single_setup
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  Routine transfer_single_message
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    TextComponent display_transfer_single_message_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $transfer_message_dur
      text [set every repeat] = $transfer_text
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  Routine randomize_switch_trials
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    CodeComponent randomize
      Code Type = Auto->JS
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      Begin Routine:
        import pandas as pd
        s_switch=pd.read_csv("stim/stim_transfer_switch.csv")
        do_sample=True
        while do_sample:
            s_switch_shuffled=s_switch.sample(frac=1).reset_index(drop=True)
            X=0
            # make sure first trial is not a switch
            if s_switch_shuffled.iloc[0]["trial_type"]=="switch":
                X=X+1
            # make sure there are no consecutive switch trials
            for j in range(s_switch_shuffled.shape[0]-1):
                if (s_switch_shuffled.iloc[j]["trial_type"]=='switch'):
                    if (s_switch_shuffled.iloc[j+1]["trial_type"]=='switch'):
                        X=X+1
            if(X==0):
                do_sample=False
        s_switch_shuffled.to_csv("stim/stim_transfer_switch_random_tmp.csv",index=False)
  Routine delete_switch_randomization
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    CodeComponent delete
      Code Type = Auto->JS
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      Begin Routine:
        os.remove("stim/stim_transfer_standard_random_tmp.csv")
        del do_sample
  Routine transfer_standard_instructions_p1
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    TextComponent transfer_standard_instructions_text_1
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Now you will be asked to categorize some turtles again, using your knowledge of what makes a turtle belong to Species F or Species J.

        We will not be asking you about size right now.
    TextComponent space_7
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent space_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine transfer_standard_instructions_p2
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    TextComponent transfer_standard_instructions_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        You will not receive feedback after your responses.

        However, please make sure to respond carefully.
    TextComponent space_9
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent space_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine transfer_standard_instructions_p3
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    TextComponent transfer_standard_instructions_text_2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Press space to start the next phase of the experiment.
    KeyboardComponent space_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .2
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  Routine transfer_switch_instructions_p1
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    TextComponent transfer_switch_instructions_text_1
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = In this next phase, you will be asked to both categorize turtles into species, and to make judgments about their size.
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    TextComponent space_13
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent space_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine transfer_switch_instructions_p2
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    TextComponent transfer_switch_instructions_text_2
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = We will usually ask you about the species, but sometimes we will ask you about size.
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    TextComponent space_15
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent space_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine transfer_switch_instructions_p3
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    TextComponent transfer_switch_instructions_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        You will not receive feedback after your responses.

        However, please make sure to respond carefully.
    TextComponent space_17
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent space_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine transfer_switch_instructions_p4
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    TextComponent transfer_switch_instructions_text_3
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = Press space to begin the next phase of the experiment.
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    KeyboardComponent space_to_begin_switch
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_demo
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    TextComponent begin_demo_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the task!

        Before we finish, we want to ask you a few questions about yourself.
    TextComponent space_19
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 2
      text = Press space to continue
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    KeyboardComponent space_to_demo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine demo
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    FormComponent demo_form
      Data Format = rows
      Font = Noto Sans
      Item Padding = 0.05
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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  Routine begin_debrief
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    TextComponent begin_debrief_text
      color = $(-1.0000, -1.0000, -1.0000)
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        The experiment has now finished. On the next page, you will see a debriefing form explaining the purpose of our study and providing you with more information. After you finish reading this form, press space and the experiment will end.

        You can then tell the researcher, and you are free to go.
    TextComponent space_20
      color = black
      letterHeight = 20
      pos = (0, -400)
      startVal [time (s)] = 3
      text = Press space to continue
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    KeyboardComponent space_to_begin_debrief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine debrief
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    ImageComponent debrief_img
      anchor = bottom-center
      image = debrief.png
      pos = (0,-500)
      size = 800,1000
      startVal [time (s)] = 0.0
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    KeyboardComponent space_to_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine do_data_delete
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    CodeComponent data_delete_code
      Code Type = Auto->JS
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      Begin Routine:
        f_csv = u'data/%s_%s_%s.csv' % (expInfo['participant'], expName, expInfo['date'])
        f_psydat = u'data/%s_%s_%s.psydat' % (expInfo['participant'], expName, expInfo['date'])
        f_log = u'data/%s_%s_%s.log' % (expInfo['participant'], expName, expInfo['date'])

        if delete_data:
            os.remove(f_csv)
            os.remove(f_psydat)
            os.remove(f_log)
  Routine get_turtle_params_training
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    CodeComponent get_turtle_params
      Code Type = Auto->JS
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      Begin Routine:
        turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(radius)
        turtle_wedge_vertices = get_turtle_wedge_vertices(angle)

        if category=="A":
            corr_resp_tmp=category_A_label
        elif category=="B":
            corr_resp_tmp=category_B_label
      Each Frame:
        #turtle_green = visual.Pie(
        #    win,
        #    fillColor=[0, 128, 0],
        #    colorSpace='rgb255',
        #    start=0,
        #    end=90,
        #    radius=100,
        #    pos=(0,200)
        #)
        #turtle_yellow = visual.Pie(
        #    win,
        #    fillColor=[255, 192, 0],
        #    lineColor=[255, 192, 0],
        #    colorSpace='rgb255',
        #    start=0,
        #    end=90,
        #    radius=200,
        #    pos=(0,200)
        #)
        #
        #turtle_yellow = visual.Pie(
        #    win=win,
        #    fillColor=[0, 0, 0],
        #    lineColor=[-1, -1, -1],
        #    start=0,
        #    end=90,
        #    radius=200,
        #    pos=(0,200)
        #)
        #
        #turtle_green.draw()
        #turtle_yellow.draw()
        #win.flip()
        #
        #circle = visual.Circle(
        #    win=win,
        #    units="pix",
        #    radius=150,
        #    fillColor=[0, 0, 0],
        #    lineColor=[-1, -1, -1]
        #)
        #
        #circle.draw()

        #win.flip()
  Routine del_corr_resp
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    CodeComponent delete_corr_resp_tmp_code_
      Code Type = Auto->JS
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      Begin Routine:
        del corr_resp_tmp # bad programming but for safety deleting this
  Routine size_judgment_params
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    CodeComponent get_turtle_params_for_size
      Code Type = Auto->JS
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      Begin Routine:
        turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(radius)
        turtle_wedge_vertices = get_turtle_wedge_vertices(angle)

        if area < avg_turtle_area:
            print("correct response is f")
            corr_resp_size_tmp='f'
        elif area > avg_turtle_area:
            print("correct response is j")
            corr_resp_size_tmp='j'
  Routine del_corr_size_resp_tmp
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    CodeComponent del_corr_resp_size_tmp_code
      Code Type = Auto->JS
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      Begin Routine:
        del corr_resp_size_tmp
  Routine del_repeats
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  Routine delete_switch_order
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    CodeComponent delete_switch_order_code
      Code Type = Auto->JS
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      Begin Routine:
        os.remove("stim/stim_transfer_switch_random_tmp.csv")
        del do_sample
  Routine age
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    FormComponent form_age
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = age.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 25
      pos = (0, -400)
      size = 400,200
      startVal [time (s)] = 2
      text [set every repeat] = Click here to continue
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  Routine tmp
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        button_text=''
  Routine race
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    ButtonComponent button_2
      bold = True
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 25
      pos = (0, -400)
      size = 400,200
      startVal [time (s)] = 2
      text [set every repeat] = Click here to continue
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    SliderComponent slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = 'American Indian or Alaskan Native'
      letterHeight = 15
      pos = (0, 200)
      size = 100,200
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1)
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  Routine randomize_standard
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    CodeComponent randomize_standard_code
      Code Type = Auto->JS
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      Begin Routine:
        import pandas as pd
        s_standard=pd.read_csv("stim/stim_transfer_standard.csv")
        do_sample=True
        while do_sample:
            s_standard_shuffled=s_standard.sample(frac=1).reset_index(drop=True)
            X=0
            # make sure first trial is not a switch
            if s_standard_shuffled.iloc[0]["trial_type"]=="switch":
                X=X+1
            # make sure there are no consecutive switch trials
            for j in range(s_standard_shuffled.shape[0]-1):
                if (s_standard_shuffled.iloc[j]["trial_type"]=='switch'):
                    if (s_standard_shuffled.iloc[j+1]["trial_type"]=='switch'):
                        X=X+1
            if(X==0):
                do_sample=False
        s_standard_shuffled.to_csv("stim/stim_transfer_standard_random_tmp.csv",index=False)
Flow
  Routine exp_setup
  Routine consent
  Routine age_check
  Routine turtle_param_functions
  LoopInitiator categorization_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine categorization_instructions_p2
    Routine categorization_instructions_p3
    Routine categorization_instructions_p4
    Routine categorization_instructions_p5
    Routine categorization_instructions_p6
    Routine categorization_instructions_p7
    Routine categorization_instructions_p8
  LoopTerminator categorization_instructions
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = stim/stim_train.csv
    loopType = random
    nReps = num_train_blocks
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    conditions:
      [OrderedDict([('stim', 2), ('category', 'A'), ('angle_psy', -24.53495333), ('radius_psy', -12.0763604), ('angle', 10), ('radius', 57)]),
      OrderedDict([('stim', 3), ('category', 'A'), ('angle_psy', -26.47077232), ('radius_psy', 11.92758930596587), ('angle', 10), ('radius', 85)]),
      OrderedDict([('stim', 4), ('category', 'A'), ('angle_psy', -23.83479794), ('radius_psy', 30.479004461502832), ('angle', 10), ('radius', 113)]),
      OrderedDict([('stim', 5), ('category', 'A'), ('angle_psy', -16.71390068), ('radius_psy', 50.111230393533226), ('angle', 10), ('radius', 140)]),
      OrderedDict([('stim', 6), ('category', 'B'), ('angle_psy', -3.854444584), ('radius_psy', -37.8392214), ('angle', 17), ('radius', 30)]),
      OrderedDict([('stim', 8), ('category', 'A'), ('angle_psy', -8.995342757), ('radius_psy', 8.387433417892344), ('angle', 17), ('radius', 85)]),
      OrderedDict([('stim', 9), ('category', 'A'), ('angle_psy', -5.541832691), ('radius_psy', 31.07890857909637), ('angle', 17), ('radius', 113)]),
      OrderedDict([('stim', 10), ('category', 'A'), ('angle_psy', -1.732665378), ('radius_psy', 46.70107673091564), ('angle', 17), ('radius', 140)]),
      OrderedDict([('stim', 11), ('category', 'B'), ('angle_psy', 13.264524555129096), ('radius_psy', -38.2203846), ('angle', 25), ('radius', 30)]),
      OrderedDict([('stim', 12), ('category', 'B'), ('angle_psy', 9.177647168036223), ('radius_psy', -16.07892918), ('angle', 25), ('radius', 57)])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
    Routine fixation_cross
    Routine blank
    Routine get_turtle_params_training
    Routine training_response
    Routine train_feedback_code_checks
    Routine training_feedback
    Routine blank
    Routine del_corr_resp
  LoopTerminator training
  LoopInitiator size_jugment_instructions_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine avg_turtle_setup
    Routine size_judgment_instructions_p1
    Routine size_judgment_instructions_p2
    Routine size_judgment_instructions_p3
    Routine size_judgment_instructions_p4
    Routine size_jugment_instructions_p5
    Routine size_judgment_instructions_p6
  LoopTerminator size_jugment_instructions_loop
  LoopInitiator size_judgment_trials loopType="TrialHandler"
    conditionsFile = stim/stim_train_with_areas.csv
    loopType = random
    nReps = num_size_blocks
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    conditions:
      [OrderedDict([('stim', 2), ('category', 'A'), ('angle_psy', -24.53495333), ('radius_psy', -12.0763604), ('angle', 10), ('radius', 57), ('area', 6783.483937263761)]),
      OrderedDict([('stim', 3), ('category', 'A'), ('angle_psy', -26.47077232), ('radius_psy', 11.92758930596587), ('angle', 10), ('radius', 85), ('area', 12681.998677303796)]),
      OrderedDict([('stim', 4), ('category', 'A'), ('angle_psy', -23.83479794), ('radius_psy', 30.479004461502832), ('angle', 10), ('radius', 113), ('area', 20906.68824440188)]),
      OrderedDict([('stim', 5), ('category', 'A'), ('angle_psy', -16.71390068), ('radius_psy', 50.111230393533226), ('angle', 10), ('radius', 140), ('area', 31040.68074671915)]),
      OrderedDict([('stim', 6), ('category', 'B'), ('angle_psy', -3.854444584), ('radius_psy', -37.8392214), ('angle', 17), ('radius', 30), ('area', 4618.141200776996)]),
      OrderedDict([('stim', 8), ('category', 'A'), ('angle_psy', -8.995342757), ('radius_psy', 8.387433417892344), ('angle', 17), ('radius', 85), ('area', 13615.095328651263)]),
      OrderedDict([('stim', 9), ('category', 'A'), ('angle_psy', -5.541832691), ('radius_psy', 31.07890857909637), ('angle', 17), ('radius', 113), ('area', 21501.12120769236)]),
      OrderedDict([('stim', 10), ('category', 'A'), ('angle_psy', -1.732665378), ('radius_psy', 46.70107673091564), ('angle', 17), ('radius', 140), ('area', 31217.831665796573)])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
    Routine fixation_cross
    Routine blank
    Routine size_judgment_params
    Routine size_judgment_response
    Routine size_jugment_code_check
    Routine size_judgment_feedback
    Routine blank
    Routine del_corr_size_resp_tmp
  LoopTerminator size_judgment_trials
  Routine index
  LoopInitiator transfer_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine transfer_loop_setup
    LoopInitiator transfer_standard_instructions_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = do_standard_instructions
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      Routine transfer_standard_instructions_p1
      Routine transfer_standard_instructions_p2
      Routine transfer_standard_instructions_p3
    LoopTerminator transfer_standard_instructions_loop
    LoopInitiator transfer_standard_loop loopType="TrialHandler"
      loopType = sequential
      nReps = num_repeats_1
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      Routine randomize_standard
      LoopInitiator transfer_standard loopType="TrialHandler"
        conditionsFile = stim/stim_transfer_standard_random_tmp.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('stim', np.int64(1)), ('category', 'Test'), ('angle_psy', np.float64(-20.84275308)), ('radius_psy', np.float64(-36.88849953)), ('angle', np.int64(10)), ('radius', np.int64(30)), ('trial_type', 'standard')]),
          OrderedDict([('stim', np.int64(7)), ('category', 'Test'), ('angle_psy', np.float64(-6.953638003)), ('radius_psy', np.float64(-14.02238557)), ('angle', np.int64(17)), ('radius', np.int64(57)), ('trial_type', 'standard')]),
          OrderedDict([('stim', np.int64(13)), ('category', 'Test'), ('angle_psy', np.float64(9.818056926810664)), ('radius_psy', np.float64(7.222251006984481)), ('angle', np.int64(25)), ('radius', np.int64(85)), ('trial_type', 'standard')]),
          OrderedDict([('stim', np.int64(19)), ('category', 'Test'), ('angle_psy', np.float64(26.34861461926153)), ('radius_psy', np.float64(27.630709460791525)), ('angle', np.int64(33)), ('radius', np.int64(113)), ('trial_type', 'standard')]),
          OrderedDict([('stim', np.int64(25)), ('category', 'Test'), ('angle_psy', np.float64(38.35549087886737)), ('radius_psy', np.float64(42.56620206713007)), ('angle', np.int64(40)), ('radius', np.int64(140)), ('trial_type', 'standard')]),
          OrderedDict([('stim', np.int64(1)), ('category', 'Test'), ('angle_psy', np.float64(-20.84275308)), ('radius_psy', np.float64(-36.88849953)), ('angle', np.int64(10)), ('radius', np.int64(30)), ('trial_type', 'standard')])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
        Routine fixation_cross
        Routine blank
        Routine transfer_response_standard
        Routine blank
      LoopTerminator transfer_standard
      Routine delete_switch_randomization
    LoopTerminator transfer_standard_loop
    LoopInitiator transfer_switch_instructions_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = do_switch_instructions
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      Routine transfer_switch_instructions_p1
      Routine transfer_switch_instructions_p2
      Routine transfer_switch_instructions_p3
      Routine transfer_switch_instructions_p4
    LoopTerminator transfer_switch_instructions_loop
    LoopInitiator transfer_switch_loop loopType="TrialHandler"
      loopType = sequential
      nReps = num_repeats_2
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      Routine randomize_switch_trials
      LoopInitiator transfer_switch loopType="TrialHandler"
        conditionsFile = stim/stim_transfer_switch_random_tmp.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('stim', 13), ('category', 'Test'), ('angle_psy', 9.818056926810664), ('radius_psy', 7.222251006984481), ('angle', 25), ('radius', 85), ('trial_type', 'standard'), ('area', 14681.4915016198)]),
          OrderedDict([('stim', 7), ('category', 'Test'), ('angle_psy', -6.953638003), ('radius_psy', -14.02238557), ('angle', 17), ('radius', 57), ('trial_type', 'standard'), ('area', 7959.460607318761)]),
          OrderedDict([('stim', 19), ('category', 'Test'), ('angle_psy', 26.34861461926153), ('radius_psy', 27.630709460791525), ('angle', 33), ('radius', 113), ('trial_type', 'standard'), ('area', 22859.82512378491)]),
          OrderedDict([('stim', 14), ('category', 'A'), ('angle_psy', 8.045214428), ('radius_psy', 27.52140038259675), ('angle', 25), ('radius', 113), ('trial_type', 'standard'), ('area', 22180.47316573864)]),
          OrderedDict([('stim', 1), ('category', 'Test'), ('angle_psy', -20.84275308), ('radius_psy', -36.88849953), ('angle', 10), ('radius', 30), ('trial_type', 'standard'), ('area', 3298.6722862692827)]),
          OrderedDict([('stim', 19), ('category', 'Test'), ('angle_psy', 26.34861461926153), ('radius_psy', 27.630709460791525), ('angle', 33), ('radius', 113), ('trial_type', 'switch'), ('area', 22859.82512378491)]),
          OrderedDict([('stim', 21), ('category', 'B'), ('angle_psy', 45.13982813678688), ('radius_psy', -35.30081098), ('angle', 40), ('radius', 30), ('trial_type', 'standard'), ('area', 8953.53906273091)])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
        Routine fixation_cross
        Routine blank
        Routine transfer_response_switch
        Routine blank
      LoopTerminator transfer_switch
      Routine delete_switch_order
    LoopTerminator transfer_switch_loop
  LoopTerminator transfer_trials
  Routine begin_debrief
  Routine debrief
