PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1680, 1050]
  color = 0.0039, 0.0039, 0.0039
  expName = turtles_categorization
  frameRateMsg = STARTING EXPERIMENT
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine turtle_param_functions
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    CodeComponent turtle_functions
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        def get_turtle_halfcircle_vertices(radius):
            n_points = 100
            angles = np.linspace(0, np.pi, n_points)
            arc_x = radius*np.cos(angles)
            arc_y = radius*np.sin(angles)
            verts=np.column_stack([arc_x,arc_y])
            verts=np.vstack(([-radius,0],
                             verts,
                             [radius,0]))
            return verts

        def get_turtle_wedge_vertices(angle):
            radius=150 # DO NOT CHANGE
            n_points = 100
            angle_rad = np.deg2rad(angle)
            angles = np.linspace(0, angle_rad, n_points)
            arc_x = radius*np.cos(angles)
            arc_y = radius*np.sin(angles)
            verts=np.column_stack([arc_x,arc_y])
            verts=np.vstack(([0,0],
                             verts,
                             [0,0]))
            return verts
  Routine training_response
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    CodeComponent get_turtle_params
      Code Type = Auto->JS
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      Begin Routine:
        turtle_halfcircle_vertices = get_turtle_halfcircle_vertices(100)
        turtle_wedge_vertices = get_turtle_wedge_vertices(43)
      Each Frame:
        #turtle_green = visual.Pie(
        #    win,
        #    fillColor=[0, 128, 0],
        #    colorSpace='rgb255',
        #    start=0,
        #    end=90,
        #    radius=100,
        #    pos=(0,200)
        #)
        #turtle_yellow = visual.Pie(
        #    win,
        #    fillColor=[255, 192, 0],
        #    lineColor=[255, 192, 0],
        #    colorSpace='rgb255',
        #    start=0,
        #    end=90,
        #    radius=200,
        #    pos=(0,200)
        #)
        #
        #turtle_yellow = visual.Pie(
        #    win=win,
        #    fillColor=[0, 0, 0],
        #    lineColor=[-1, -1, -1],
        #    start=0,
        #    end=90,
        #    radius=200,
        #    pos=(0,200)
        #)
        #
        #turtle_green.draw()
        #turtle_yellow.draw()
        #win.flip()
        #
        #circle = visual.Circle(
        #    win=win,
        #    units="pix",
        #    radius=150,
        #    fillColor=[0, 0, 0],
        #    lineColor=[-1, -1, -1]
        #)
        #
        #circle.draw()

        #win.flip()
    KeyboardComponent key_resp_training
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent turtle_halfcircle
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      nVertices = 100
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_halfcircle_vertices
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    PolygonComponent turtle_wedge
      fillColor = 1.0000, 0.5059, -1.0000
      lineColor = 1.0000, 0.5059, -1.0000
      shape = custom polygon...
      size = (1,1)
      startVal [time (s)] = 0.0
      vertices [set every repeat] = turtle_wedge_vertices
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    TextComponent training_prompt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos = (0, -100)
      startVal [time (s)] = 0.0
      text = Is this turtle in Category F or Category J?
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Flow
  Routine turtle_param_functions
  Routine training_response
